PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = ARExperiment1
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Routines
  Routine fixation
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine Intro
    TextComponent IntroText
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        Press the space bar to begin
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
    ImageComponent target
      image [set every repeat] = $cue_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      storeCorrect = True
      syncScreenRefresh = False
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  Routine End
    TextComponent EndText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment

        Thank you for your participation!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Exp1Conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('cue_file', 'images/GoIcon.png'), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/GoIcon.png'), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/GoIcon.png'), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/GoIcon.png'), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/StopIcon.png'), ('is_valid', 'invalid')]),
      OrderedDict([('cue_file', 'images/StopIcon.png'), ('is_valid', 'invalid')]),
      OrderedDict([('cue_file', 'images/StopIcon.png'), ('is_valid', 'invalid')]),
      OrderedDict([('cue_file', 'images/StopIcon.png'), ('is_valid', 'invalid')]),
      OrderedDict([('cue_file', 'images/GoIcon.png'), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/StopIcon.png'), ('is_valid', 'invalid')])]
    Routine fixation
    Routine Trial
  LoopTerminator trials
  Routine End
