PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'Session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show info dlg = False
  Units = height
  Window size (pixels) = [1536, 864]
  expName = GoNoGoTaskCoder
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Routines
  Routine fixation
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = +
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  Routine Intro
    TextComponent IntroText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        Coloured circle cues will appear on the screen at random intervals, paired with a beep. Your task is to press the space bar whenever the red circle appears, but not the yellow or orange circles.

        Press the space bar to begin the practice trials.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent EndText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment

        Thank you for your participation!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine randomisedBreak
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = randint(5,10)
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  Routine EndOfPractice
    TextComponent text_3
      letterHeight = 0.04
      startVal [time (s)] = 0
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      text:
        This is the end of the practice block.


        Press the space bar when you are ready to begin the experiment
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine PauseBeforeStart
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine ExpTrial
    ImageComponent target
      image [set every repeat] = $cue_file
      pos [set every repeat] = (0, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      storeCorrect = True
      syncScreenRefresh = False
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    SoundComponent sound_1
      sound = beep.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine PracticeTrial
    ImageComponent image_2
      image [set every repeat] = $cue_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_2
      sound = beep.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = nothing
      storeCorrect = True
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  Routine Incorrect
    ImageComponent image
      image [set every repeat] = images/Incorrect.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Correct
    ImageComponent image_3
      image = images/Correct.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine blockSelect
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        nRepsCorr = 0
        nRepsIncorr = 0
      Begin Routine:
        if key_resp_3.corr == 1:
            nRepsCorr = 1
            nRepsIncorr = 0
        else:
            nRepsCorr = 0
            nRepsIncorr = 1
  Routine Break
    TextComponent text_5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        This is the end of this block

        Feel free to take break and remove the headset if you need

        The researcher will tell you when you advance to the next block
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceBreak
Flow
  Routine Intro
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = Exp1Conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'cue_file': 'images/YellowIcon.png', 'corrAns': None},
      {'cue_file': 'images/OrangeIcon.png', 'corrAns': None},
      {'cue_file': 'images/StopIcon.png', 'corrAns': 'space'}]
    Routine practiceBreak
    Routine PracticeTrial
    Routine blockSelect
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = nRepsCorr
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      Routine Correct
    LoopTerminator trials
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = nRepsIncorr
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      Routine Incorrect
    LoopTerminator trials_2
  LoopTerminator trials_3
  Routine EndOfPractice
  Routine PauseBeforeStart
  LoopInitiator Block1 loopType="TrialHandler"
    conditionsFile = Exp1Conditions.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'cue_file': 'images/YellowIcon.png', 'position': 0.5},
      {'cue_file': 'images/YellowIcon.png', 'position': -0.5},
      {'cue_file': 'images/OrangeIcon.png', 'position': 0.5},
      {'cue_file': 'images/OrangeIcon.png', 'position': -0.5},
      {'cue_file': 'images/StopIcon.png', 'position': 0.5},
      {'cue_file': 'images/StopIcon.png', 'position': -0.5}]
    Routine randomisedBreak
    Routine ExpTrial
  LoopTerminator Block1
  Routine Break
  LoopInitiator Block2 loopType="TrialHandler"
    conditionsFile = Exp1Conditions.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'cue_file': 'images/YellowIcon.png', 'corrAns': None},
      {'cue_file': 'images/OrangeIcon.png', 'corrAns': None},
      {'cue_file': 'images/StopIcon.png', 'corrAns': 'space'}]
    Routine randomisedBreak
    Routine ExpTrial
  LoopTerminator Block2
  Routine End
